CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:169
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|input
    Name of the file:hyb1_tiling.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|None
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

ConvertImageToObjects:[module_num:2|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
    Select the input image:Nuclei
    Name the output object:nuclei_objects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:3|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notes:['An 1 pixel black division is created between the identified objects, facilitating better measurement with ImageJ.']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
    Select the input objects:nuclei_objects
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:4|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
    Select the input objects:ShrunkenNuclei
    Name the output image:ShrunkenNucleiOutlines
    Select the color format:Binary (black & white)
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
IdentifySecondaryObjects:[module_num:5|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notes:['18pixels correspond to 2.052 um according to the specific 40x lens']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
    Select the input objects:ShrunkenNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Nuclei
    Number of pixels by which to expand the primary objects:9
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
ExpandOrShrinkObjects:[module_num:6|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notes:['An 1 pixel black division is created between the identified objects, facilitating better measurement with ImageJ.']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
    Select the input objects:Cells
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:ShrunkenCells
    Name the output image:ShrunkenCellOutlines
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:ShrunkenCellOutlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Cell_outlines
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Cell_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:gene1
    Name the output image:EnhancedGene1
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EnhancedGene1
    Name the primary objects to be identified:IdentifiedBlobs1
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.008
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
ShrinkToObjectCenters:[module_num:11|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
    Select the input object:IdentifiedBlobs1
    Name the output object:ShrunkenBlobs1

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:gene1
    Select objects to measure:IdentifiedBlobs1

RelateObjects:[module_num:13|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects1
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
EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:gene2
    Name the output image:EnhancedGene2
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:EnhancedGene2
    Name the primary objects to be identified:IdentifiedBlobs2
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.008
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
ShrinkToObjectCenters:[module_num:16|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
    Select the input object:IdentifiedBlobs2
    Name the output object:ShrunkenBlobs2

MeasureObjectIntensity:[module_num:17|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
    Select images to measure:gene2
    Select objects to measure:IdentifiedBlobs2

RelateObjects:[module_num:18|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects2
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
EnhanceOrSuppressFeatures:[module_num:19|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
    Select the input image:gene3
    Name the output image:EnhancedGene3
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:EnhancedGene3
    Name the primary objects to be identified:IdentifiedBlobs3
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.005
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
ShrinkToObjectCenters:[module_num:21|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
    Select the input object:IdentifiedBlobs3
    Name the output object:ShrunkenBlobs3

MeasureObjectIntensity:[module_num:22|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
    Select images to measure:gene3
    Select objects to measure:IdentifiedBlobs3

RelateObjects:[module_num:23|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects3
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
EnhanceOrSuppressFeatures:[module_num:24|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
    Select the input image:gene4
    Name the output image:EnhancedGene4
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:25|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
    Select the input image:EnhancedGene4
    Name the primary objects to be identified:IdentifiedBlobs4
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.02
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
ShrinkToObjectCenters:[module_num:26|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
    Select the input object:IdentifiedBlobs4
    Name the output object:ShrunkenBlobs4

MeasureObjectIntensity:[module_num:27|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
    Select images to measure:gene4
    Select objects to measure:IdentifiedBlobs4

RelateObjects:[module_num:28|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs4
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects4
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
EnhanceOrSuppressFeatures:[module_num:29|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
    Select the input image:gene5
    Name the output image:EnhancedGene5
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:30|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
    Select the input image:EnhancedGene5
    Name the primary objects to be identified:IdentifiedBlobs5
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.005
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
ShrinkToObjectCenters:[module_num:31|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
    Select the input object:IdentifiedBlobs5
    Name the output object:ShrunkenBlobs5

MeasureObjectIntensity:[module_num:32|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
    Select images to measure:gene5
    Select objects to measure:IdentifiedBlobs5

RelateObjects:[module_num:33|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs5
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects5
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
EnhanceOrSuppressFeatures:[module_num:34|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
    Select the input image:gene6
    Name the output image:EnhancedGene6
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:35|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
    Select the input image:EnhancedGene6
    Name the primary objects to be identified:IdentifiedBlobs6
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.006
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
ShrinkToObjectCenters:[module_num:36|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
    Select the input object:IdentifiedBlobs6
    Name the output object:ShrunkenBlobs6

MeasureObjectIntensity:[module_num:37|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
    Select images to measure:gene6
    Select objects to measure:IdentifiedBlobs6

RelateObjects:[module_num:38|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs6
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects6
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
EnhanceOrSuppressFeatures:[module_num:39|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
    Select the input image:gene7
    Name the output image:EnhancedGene7
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:40|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
    Select the input image:EnhancedGene7
    Name the primary objects to be identified:IdentifiedBlobs7
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.025
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
ShrinkToObjectCenters:[module_num:41|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
    Select the input object:IdentifiedBlobs7
    Name the output object:ShrunkenBlobs7

MeasureObjectIntensity:[module_num:42|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
    Select images to measure:gene7
    Select objects to measure:IdentifiedBlobs7

RelateObjects:[module_num:43|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs7
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects7
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
EnhanceOrSuppressFeatures:[module_num:44|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
    Select the input image:gene8
    Name the output image:EnhancedGene8
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:45|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
    Select the input image:EnhancedGene8
    Name the primary objects to be identified:IdentifiedBlobs8
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.03
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
ShrinkToObjectCenters:[module_num:46|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
    Select the input object:IdentifiedBlobs8
    Name the output object:ShrunkenBlobs8

MeasureObjectIntensity:[module_num:47|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
    Select images to measure:gene8
    Select objects to measure:IdentifiedBlobs8

RelateObjects:[module_num:48|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs8
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects8
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
EnhanceOrSuppressFeatures:[module_num:49|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
    Select the input image:gene9
    Name the output image:EnhancedGene9
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:50|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
    Select the input image:EnhancedGene9
    Name the primary objects to be identified:IdentifiedBlobs9
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.015
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
ShrinkToObjectCenters:[module_num:51|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
    Select the input object:IdentifiedBlobs9
    Name the output object:ShrunkenBlobs9

MeasureObjectIntensity:[module_num:52|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
    Select images to measure:gene9
    Select objects to measure:IdentifiedBlobs9

RelateObjects:[module_num:53|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs9
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects9
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
EnhanceOrSuppressFeatures:[module_num:54|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
    Select the input image:gene10
    Name the output image:EnhancedGene10
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:55|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
    Select the input image:EnhancedGene10
    Name the primary objects to be identified:IdentifiedBlobs10
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.016
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
ShrinkToObjectCenters:[module_num:56|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
    Select the input object:IdentifiedBlobs10
    Name the output object:ShrunkenBlobs10

MeasureObjectIntensity:[module_num:57|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
    Select images to measure:gene10
    Select objects to measure:IdentifiedBlobs10

RelateObjects:[module_num:58|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs10
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects10
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
EnhanceOrSuppressFeatures:[module_num:59|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
    Select the input image:gene11
    Name the output image:EnhancedGene11
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:60|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
    Select the input image:EnhancedGene11
    Name the primary objects to be identified:IdentifiedBlobs11
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.017
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
ShrinkToObjectCenters:[module_num:61|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
    Select the input object:IdentifiedBlobs11
    Name the output object:ShrunkenBlobs11

MeasureObjectIntensity:[module_num:62|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
    Select images to measure:gene11
    Select objects to measure:IdentifiedBlobs11

RelateObjects:[module_num:63|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs11
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects11
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
EnhanceOrSuppressFeatures:[module_num:64|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
    Select the input image:gene12
    Name the output image:EnhancedGene12
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:65|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
    Select the input image:EnhancedGene12
    Name the primary objects to be identified:IdentifiedBlobs12
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.016
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
ShrinkToObjectCenters:[module_num:66|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
    Select the input object:IdentifiedBlobs12
    Name the output object:ShrunkenBlobs12

MeasureObjectIntensity:[module_num:67|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
    Select images to measure:gene12
    Select objects to measure:IdentifiedBlobs12

RelateObjects:[module_num:68|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs12
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects12
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
EnhanceOrSuppressFeatures:[module_num:69|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
    Select the input image:gene13
    Name the output image:EnhancedGene13
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:70|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
    Select the input image:EnhancedGene13
    Name the primary objects to be identified:IdentifiedBlobs13
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.008
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
ShrinkToObjectCenters:[module_num:71|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
    Select the input object:IdentifiedBlobs13
    Name the output object:ShrunkenBlobs13

MeasureObjectIntensity:[module_num:72|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
    Select images to measure:gene13
    Select objects to measure:IdentifiedBlobs13

RelateObjects:[module_num:73|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs13
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects13
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
EnhanceOrSuppressFeatures:[module_num:74|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
    Select the input image:gene14
    Name the output image:EnhancedGene14
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:75|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
    Select the input image:EnhancedGene14
    Name the primary objects to be identified:IdentifiedBlobs14
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.015
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
ShrinkToObjectCenters:[module_num:76|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
    Select the input object:IdentifiedBlobs14
    Name the output object:ShrunkenBlobs14

MeasureObjectIntensity:[module_num:77|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
    Select images to measure:gene14
    Select objects to measure:IdentifiedBlobs14

RelateObjects:[module_num:78|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs14
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects14
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
EnhanceOrSuppressFeatures:[module_num:79|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
    Select the input image:gene15
    Name the output image:EnhancedGene15
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:80|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
    Select the input image:EnhancedGene15
    Name the primary objects to be identified:IdentifiedBlobs15
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.015
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
ShrinkToObjectCenters:[module_num:81|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
    Select the input object:IdentifiedBlobs15
    Name the output object:ShrunkenBlobs15

MeasureObjectIntensity:[module_num:82|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
    Select images to measure:gene15
    Select objects to measure:IdentifiedBlobs15

RelateObjects:[module_num:83|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs15
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects15
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
EnhanceOrSuppressFeatures:[module_num:84|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
    Select the input image:gene16
    Name the output image:EnhancedGene16
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:85|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
    Select the input image:EnhancedGene16
    Name the primary objects to be identified:IdentifiedBlobs16
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.012
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
ShrinkToObjectCenters:[module_num:86|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
    Select the input object:IdentifiedBlobs16
    Name the output object:ShrunkenBlobs16

MeasureObjectIntensity:[module_num:87|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
    Select images to measure:gene16
    Select objects to measure:IdentifiedBlobs16

RelateObjects:[module_num:88|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs16
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects16
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
EnhanceOrSuppressFeatures:[module_num:89|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
    Select the input image:gene17
    Name the output image:EnhancedGene17
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:90|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
    Select the input image:EnhancedGene17
    Name the primary objects to be identified:IdentifiedBlobs17
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.012
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
ShrinkToObjectCenters:[module_num:91|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
    Select the input object:IdentifiedBlobs17
    Name the output object:ShrunkenBlobs17

MeasureObjectIntensity:[module_num:92|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
    Select images to measure:gene17
    Select objects to measure:IdentifiedBlobs17

RelateObjects:[module_num:93|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs17
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects17
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
EnhanceOrSuppressFeatures:[module_num:94|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
    Select the input image:gene18
    Name the output image:EnhancedGene18
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:95|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
    Select the input image:EnhancedGene18
    Name the primary objects to be identified:IdentifiedBlobs18
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.02
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
ShrinkToObjectCenters:[module_num:96|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
    Select the input object:IdentifiedBlobs18
    Name the output object:ShrunkenBlobs18

MeasureObjectIntensity:[module_num:97|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
    Select images to measure:gene18
    Select objects to measure:IdentifiedBlobs18

RelateObjects:[module_num:98|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs18
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects18
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
EnhanceOrSuppressFeatures:[module_num:99|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
    Select the input image:gene19
    Name the output image:EnhancedGene19
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:100|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
    Select the input image:EnhancedGene19
    Name the primary objects to be identified:IdentifiedBlobs19
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.006
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
ShrinkToObjectCenters:[module_num:101|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
    Select the input object:IdentifiedBlobs19
    Name the output object:ShrunkenBlobs19

MeasureObjectIntensity:[module_num:102|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
    Select images to measure:gene19
    Select objects to measure:IdentifiedBlobs19

RelateObjects:[module_num:103|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs19
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects19
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
EnhanceOrSuppressFeatures:[module_num:104|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
    Select the input image:gene20
    Name the output image:EnhancedGene20
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:105|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
    Select the input image:EnhancedGene20
    Name the primary objects to be identified:IdentifiedBlobs20
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.009
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
ShrinkToObjectCenters:[module_num:106|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
    Select the input object:IdentifiedBlobs20
    Name the output object:ShrunkenBlobs20

MeasureObjectIntensity:[module_num:107|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
    Select images to measure:gene20
    Select objects to measure:IdentifiedBlobs20

RelateObjects:[module_num:108|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs20
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects20
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
EnhanceOrSuppressFeatures:[module_num:109|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
    Select the input image:gene21
    Name the output image:EnhancedGene21
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:110|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
    Select the input image:EnhancedGene21
    Name the primary objects to be identified:IdentifiedBlobs21
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.008
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
ShrinkToObjectCenters:[module_num:111|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
    Select the input object:IdentifiedBlobs21
    Name the output object:ShrunkenBlobs21

MeasureObjectIntensity:[module_num:112|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
    Select images to measure:gene21
    Select objects to measure:IdentifiedBlobs21

RelateObjects:[module_num:113|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs21
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects21
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
EnhanceOrSuppressFeatures:[module_num:114|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
    Select the input image:gene22
    Name the output image:EnhancedGene22
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:115|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
    Select the input image:EnhancedGene22
    Name the primary objects to be identified:IdentifiedBlobs22
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.004
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
ShrinkToObjectCenters:[module_num:116|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
    Select the input object:IdentifiedBlobs22
    Name the output object:ShrunkenBlobs22

MeasureObjectIntensity:[module_num:117|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
    Select images to measure:gene22
    Select objects to measure:IdentifiedBlobs22

RelateObjects:[module_num:118|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs22
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects22
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
EnhanceOrSuppressFeatures:[module_num:119|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
    Select the input image:gene23
    Name the output image:EnhancedGene23
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:120|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
    Select the input image:EnhancedGene23
    Name the primary objects to be identified:IdentifiedBlobs23
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.005
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
ShrinkToObjectCenters:[module_num:121|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
    Select the input object:IdentifiedBlobs23
    Name the output object:ShrunkenBlobs23

MeasureObjectIntensity:[module_num:122|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
    Select images to measure:gene23
    Select objects to measure:IdentifiedBlobs23

RelateObjects:[module_num:123|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs23
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects23
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
EnhanceOrSuppressFeatures:[module_num:124|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
    Select the input image:gene24
    Name the output image:EnhancedGene24
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:125|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
    Select the input image:EnhancedGene24
    Name the primary objects to be identified:IdentifiedBlobs24
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.006
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
ShrinkToObjectCenters:[module_num:126|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
    Select the input object:IdentifiedBlobs24
    Name the output object:ShrunkenBlobs24

MeasureObjectIntensity:[module_num:127|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
    Select images to measure:gene24
    Select objects to measure:IdentifiedBlobs24

RelateObjects:[module_num:128|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs24
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects24
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
EnhanceOrSuppressFeatures:[module_num:129|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
    Select the input image:gene25
    Name the output image:EnhancedGene25
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:130|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
    Select the input image:EnhancedGene25
    Name the primary objects to be identified:IdentifiedBlobs25
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.012
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
ShrinkToObjectCenters:[module_num:131|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
    Select the input object:IdentifiedBlobs25
    Name the output object:ShrunkenBlobs25

MeasureObjectIntensity:[module_num:132|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
    Select images to measure:gene25
    Select objects to measure:IdentifiedBlobs25

RelateObjects:[module_num:133|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs25
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects25
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
EnhanceOrSuppressFeatures:[module_num:134|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
    Select the input image:gene26
    Name the output image:EnhancedGene26
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:135|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
    Select the input image:EnhancedGene26
    Name the primary objects to be identified:IdentifiedBlobs26
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.012
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
ShrinkToObjectCenters:[module_num:136|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
    Select the input object:IdentifiedBlobs26
    Name the output object:ShrunkenBlobs26

MeasureObjectIntensity:[module_num:137|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
    Select images to measure:gene26
    Select objects to measure:IdentifiedBlobs26

RelateObjects:[module_num:138|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs26
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects26
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
EnhanceOrSuppressFeatures:[module_num:139|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
    Select the input image:gene27
    Name the output image:EnhancedGene27
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:140|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
    Select the input image:EnhancedGene27
    Name the primary objects to be identified:IdentifiedBlobs27
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.008
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
ShrinkToObjectCenters:[module_num:141|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
    Select the input object:IdentifiedBlobs27
    Name the output object:ShrunkenBlobs27

MeasureObjectIntensity:[module_num:142|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
    Select images to measure:gene27
    Select objects to measure:IdentifiedBlobs27

RelateObjects:[module_num:143|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs27
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects27
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
EnhanceOrSuppressFeatures:[module_num:144|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
    Select the input image:gene28
    Name the output image:EnhancedGene28
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:145|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
    Select the input image:EnhancedGene28
    Name the primary objects to be identified:IdentifiedBlobs28
    Typical diameter of objects, in pixel units (Min,Max):3,19
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.005
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
ShrinkToObjectCenters:[module_num:146|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
    Select the input object:IdentifiedBlobs28
    Name the output object:ShrunkenBlobs28

MeasureObjectIntensity:[module_num:147|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
    Select images to measure:gene28
    Select objects to measure:IdentifiedBlobs28

RelateObjects:[module_num:148|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs28
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects28
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
EnhanceOrSuppressFeatures:[module_num:149|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
    Select the input image:gene29
    Name the output image:EnhancedGene29
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:150|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
    Select the input image:EnhancedGene29
    Name the primary objects to be identified:IdentifiedBlobs29
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.008
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
ShrinkToObjectCenters:[module_num:151|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
    Select the input object:IdentifiedBlobs29
    Name the output object:ShrunkenBlobs29

MeasureObjectIntensity:[module_num:152|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
    Select images to measure:gene29
    Select objects to measure:IdentifiedBlobs29

RelateObjects:[module_num:153|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs29
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects29
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
EnhanceOrSuppressFeatures:[module_num:154|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
    Select the input image:gene30
    Name the output image:EnhancedGene30
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:155|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
    Select the input image:EnhancedGene30
    Name the primary objects to be identified:IdentifiedBlobs30
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.006
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
ShrinkToObjectCenters:[module_num:156|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
    Select the input object:IdentifiedBlobs30
    Name the output object:ShrunkenBlobs30

MeasureObjectIntensity:[module_num:157|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
    Select images to measure:gene30
    Select objects to measure:IdentifiedBlobs30

RelateObjects:[module_num:158|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs30
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects30
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
EnhanceOrSuppressFeatures:[module_num:159|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
    Select the input image:gene31
    Name the output image:EnhancedGene31
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:160|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
    Select the input image:EnhancedGene31
    Name the primary objects to be identified:IdentifiedBlobs31
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.01
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
ShrinkToObjectCenters:[module_num:161|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
    Select the input object:IdentifiedBlobs31
    Name the output object:ShrunkenBlobs31

MeasureObjectIntensity:[module_num:162|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
    Select images to measure:gene31
    Select objects to measure:IdentifiedBlobs31

RelateObjects:[module_num:163|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs31
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects31
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
EnhanceOrSuppressFeatures:[module_num:164|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
    Select the input image:gene32
    Name the output image:EnhancedGene32
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:165|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
    Select the input image:EnhancedGene32
    Name the primary objects to be identified:IdentifiedBlobs32
    Typical diameter of objects, in pixel units (Min,Max):2,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.005
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
ShrinkToObjectCenters:[module_num:166|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
    Select the input object:IdentifiedBlobs32
    Name the output object:ShrunkenBlobs32

MeasureObjectIntensity:[module_num:167|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
    Select images to measure:gene32
    Select objects to measure:IdentifiedBlobs32

RelateObjects:[module_num:168|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
    Parent objects:ShrunkenCells
    Child objects:IdentifiedBlobs32
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects32
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
ExportToSpreadsheet:[module_num:169|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifiedBlobs28|Location_CenterMassIntensity_Z_gene28,IdentifiedBlobs28|Location_CenterMassIntensity_X_gene28,IdentifiedBlobs28|Location_CenterMassIntensity_Y_gene28,IdentifiedBlobs28|Location_MaxIntensity_Z_gene28,IdentifiedBlobs28|Location_MaxIntensity_X_gene28,IdentifiedBlobs28|Location_MaxIntensity_Y_gene28,IdentifiedBlobs28|Location_Center_Z,IdentifiedBlobs28|Location_Center_Y,IdentifiedBlobs28|Location_Center_X,IdentifiedBlobs17|Location_MaxIntensity_Z_gene17,IdentifiedBlobs17|Location_MaxIntensity_X_gene17,IdentifiedBlobs17|Location_MaxIntensity_Y_gene17,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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